PsychoPy2experiment version="2022.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'First two letters of each parents First Name and their date of birth (Month and Day only) . E.g. hapa1114': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = pix
  Use version = 2022.2.4
  Window size (pixels) = [1920, 1080]
  color = $[1.000,1.000,1.000]
  expName = RRcb_task
  keyboardBackend = ioHub
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Routines
  Routine fixationcrosses
    PolygonComponent fixation_cross
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (150, 150)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    CodeComponent counter_code
      Code Type = Both
      Begin Experiment:
        trial_counter=0;
      Begin JS Experiment:
        trial_counter = 0;
      End JS Routine:
        trial_counter += 1;
      End Routine:
        trial_counter+=1;
  Routine targetlines
    PolygonComponent targetline
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 5
      pos [set every frame] = [start+t*jitter,ystarttarget]
      shape = line
      size [set every frame] = t*disp
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $durations
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    PolygonComponent distractorline1
      fillColor = coral
      lineColor = coral
      lineWidth = 5
      pos [set every frame] = (xstartdistractor1+t*jitterdistractor1,ystartdistractor1)
      shape = line
      size [set every frame] = t*dispdistractor1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $durationsdistractor1
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    PolygonComponent distractorline2
      fillColor = coral
      lineColor = coral
      lineWidth = 5
      pos [set every frame] = (xstartdistractor2+t*jitterdistractor2,ystartdistractor2)
      shape = line
      size [set every frame] = t*dispdistractor2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $durationsdistractor2
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  Routine prompt
    TextComponent prompt_text
      color = black
      letterHeight = 75
      startVal [time (s)] = 0
      stopVal [duration (s)] = .75
      text [set every repeat] = $display
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  Routine timerespstart
    PolygonComponent timebutton_shape
      fillColor = $[-1.000,1.000,1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      nVertices = 6
      pos [set every repeat] = $x_loc
      shape = rectangle
      size = (.25, .15)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent timebutton_text
      letterHeight = .07
      pos [set every repeat] = $x_loc
      startVal [time (s)] = 0.0
      text = time
      units = height
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    MouseComponent mouse_timestart
      clickable = timebutton_shape
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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  Routine timerespend
    PolygonComponent timebutton_shape_2
      fillColor = $[-1.000,1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      pos [set every repeat] = $x_loc
      shape = rectangle
      size = (.25, .15)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent timebutton_text_2
      letterHeight = .07
      pos [set every repeat] = $x_loc
      startVal [time (s)] = 0.0
      text = time
      units = height
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    MouseComponent mouse_timestop
      clickable = timebutton_shape_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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  Routine placeholder
    PolygonComponent timebutton_shape_3
      fillColor = $[-1.000,1.000,1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      pos [set every repeat] = $x_loc
      shape = rectangle
      size = (.25,.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      units = height
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    TextComponent timebutton_text_3
      letterHeight = .07
      pos [set every repeat] = $x_loc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = time
      units = height
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  Routine ready
    TextComponent text
      color = black
      letterHeight = .05
      startVal [time (s)] = 0.0
      text = Press the "space" when you are ready to move onto the next trial. 
      units = height
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    TextComponent instruction_req
      color = black
      letterHeight = .03
      pos = (0, -.25)
      startVal [time (s)] = 0.0
      text = Press "i" to see instructions again, press "t" for troubleshooting help. 
      units = height
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    KeyboardComponent key_resp
      allowedKeys = 'space','i','t',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practicetrialendscreen
    TextComponent practicetrialend_text
      color = black
      letterHeight = .04
      startVal [time (s)] = 0.0
      units = height
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      text:
        The practice trials are now finished.

        If you have any questions before starting the experiment, please contact shyamu93@my.yorku.ca before continuing. If you want to see the experimental instructions again, press the "i" key on your keyboard any time in between trials. If you run into any issues with the experiment, press "t" to view a troubleshooting screen.

        Press "space" to start the experiment
    KeyboardComponent practicetrialend_key_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine crossmark
    PolygonComponent clickx
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      ori = 45
      pos = (-750, 400)
      shape = cross
      size = (50, 50)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent click
      clickable = clickx
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name, 
      startVal [time (s)] = 0.0
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    CodeComponent click_code
      Code Type = Both
      Begin JS Routine:
        clicks = 0;
        crosses = [];
      Each JS Frame:
        if (contains(click) && click.getPressed()[0] === 1 ) {
            cross = new visual.ShapeStim({win: psychoJS.window, pos: click.getPos(), vertices: 'cross', size: [50, 50], ori: 45.0, fillColor: [1.000, 1.000, 1.000]});
            cross.setAutoDraw(true);
            crosses.append(cross);
            clicks = clicks + 1;
        }

        if (clicks >= 3) {
            continueRoutine = false;
        }
  Routine linestop
    PolygonComponent polygon_2
      fillColor = $[1.000,1.000,1.000]
      shape = rectangle
      size = (2000, 2000)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_3
      clickable = polygon
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space',
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent mouse_code_2
      Code Type = Both
      Begin JS Routine:
        crosses = [];
      Begin Routine:
        crosses = [] ;
      Each Frame:
        if mouse.isPressedIn(polygon_2):
            cross = visual.ShapeStim(win, pos=clicker.getPos(), vertices='cross', depth=-2, size=(50,50), ori=45.0, fillColor="black")
            cross.setAutoDraw(True)
            crosses.append()
      Each JS Frame:
        if (polygon_2.contains(mouse_2) && mouse_2.getPressed()[0] === 1 ){
            cross = new visual.ShapeStim({win: psychoJS.window, pos: mouse_2.getPos(), vertices: 'cross', size: [50, 50], ori: 45.0, fillColor: [1.000, 1.000, 1.000]});
            cross.setAutoDraw(true);
            crosses.append(cross);
        }
      End JS Routine:
        for (var across, _pj_c = 0, _pj_a = crosses, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            across = _pj_a[_pj_c];
            across.setAutoDraw(false);
        }
        crosses = [];
      End Routine:
        for across in crosses:
                across.setAutoDraw(False)
  Routine blank
    PolygonComponent polygon_3
      fillColor = $[1.000,0.004,1.000]
      shape = rectangle
      size = (2000, 2000)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Both
    MouseComponent mouse_4
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine instructions_part2
    TextComponent instruction_text_2
      color = black
      letterHeight = 35
      startVal [time (s)] = 0.0
      wrapWidth = 1000
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      text:
        This experiment is aimed at measuring your innate perception of space and time, so it is important that you don't count or use your computer screen as a frame of reference for the lines. Both of these strategies will lead to inaccurate data. Press the "space" to continue.
  Routine catchtrials
    TextComponent catch_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $catchd
      units = height
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    KeyboardComponent key_resp_2
      allowedKeys = 'c','l','s','space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent catch_code
      Code Type = Both
      Each Frame:
        if trial_counter==0 or (trial_counter+1) %20!=0 :
            continueRoutine = False
      Each JS Frame:
        if (((trial_counter === 0) || (((trial_counter + 1) % 20) !== 0))) {
            continueRoutine = false;
        }
  Routine breakscreen
    TextComponent breakscreen_text
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text [set every repeat] = You are now half way done with the trials. You can take a quick break if you'd like. Once you are ready to proceed with the rest of the experiment you can press "space".
      units = height
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    KeyboardComponent break_key_resp
      allowedKeys = 'space','i',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Each Frame:
        if trial_counter != 81:
            continueRoutine = False
  Routine strategy
    TextComponent text_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Did you use counting as a strategy to reproduce time in this experiment? type "Y" for yes, and "N" for no. 
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    KeyboardComponent key_resp_5
      allowedKeys = 'y','n',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine endexperiment
    TextComponent expend_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 45
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      text:
        Thank you for your participation! Your completion code is 492187, please write this number down as you will need it to confirm your completion of the experiment. Once you have the code, you can  press "esc" and close this browser and then return to Qualtrics to verify that you have completed this experiment.
  Routine hourglass_start
  Routine hg_start
    PolygonComponent hg_bottom
      fillColor [set every repeat] = $[0.004,0.004,0.004]
      lineColor [set every repeat] = $[0.004,0.004,0.004]
      pos [set every repeat] = $bottom_hg_loc
      shape = triangle
      size = (0.08, 0.06)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent mouse_hg
      clickable = hg_bottom, hg_top
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    PolygonComponent hg_top
      fillColor [set every repeat] = $[0.004,0.004,0.004]
      lineColor [set every repeat] = $[0.004,0.004,0.004]
      ori = 180
      pos [set every repeat] = $top_hg_loc
      shape = triangle
      size = (0.08, 0.06)
      startVal [time (s)] = 0.0
      units = height
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  Routine hg_mid
    PolygonComponent hg_bottom_2
      fillColor [set every repeat] = $[-1.000,-1.000,-1.000]
      lineColor [set every repeat] = $[-1.000,-1.000,-1.000]
      pos [set every repeat] = $bottom_hg_loc
      shape = triangle
      size = (0.08, 0.06)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent mouse_hg_2
      clickable = hg_bottom_2, hg_top_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    PolygonComponent hg_top_2
      fillColor [set every repeat] = $[-1.000,-1.000,-1.000]
      lineColor [set every repeat] = $[-1.000,-1.000,-1.000]
      ori = 180
      pos [set every repeat] = $top_hg_loc
      shape = triangle
      size = (0.08, 0.06)
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        StartTime = GlobalClock.getTime()
        thisExp.addData('StartTime', StartTime)
      End Routine:
        EndTime = GlobalClock.getTime()
        thisExp.addData('EndTime', EndTime)
  Routine hg_end
    PolygonComponent hg_bottom_3
      fillColor [set every repeat] = $[0.004,0.004,0.004]
      lineColor [set every repeat] = $[0.004,0.004,0.004]
      pos [set every repeat] = $bottom_hg_loc
      shape = triangle
      size = (0.08, 0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      units = height
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    PolygonComponent hg_top_3
      fillColor [set every repeat] = $[0.004,0.004,0.004]
      lineColor [set every repeat] = $[0.004,0.004,0.004]
      ori = 180
      pos [set every repeat] = $top_hg_loc
      shape = triangle
      size = (0.08, 0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      units = height
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  Routine instruction_reminder
    TextComponent text_3
      letterHeight = 0.35
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = height
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      text:
        Great job! As a reminder, as lines grow across the screen, please pay attention to both the final length of the line as well as the total amount of time the line is on the screen.

        If the prompt following this line says "time" you will be reproducting the duration (amount of time) the line appeared on the screen, if the prompt says "line" you will be reproducing the length of the line (the amount of space the line takes up on your screen). On "line" trials, please click the "X", and then place another "X" (with your mouse click) at a horizontal distance away from the initial "X" that you think is equivalent to the length of the line you just saw. On the "time" trials, you will click the grey hourglass to start your duration reproduction, and again when you think the amount of time that has passed since you first clicked the hourglass is equivalent to the amount of time the line that you just saw.

        You will now complete a few more practice trials and then move onto the experimental trials. Press "space" to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent instr_code
      Code Type = Both
      Each Frame:
        if trial_counter != 2:
            continueRoutine = False
      Each JS Frame:
        if ((trial_counter !== 2)) {
            continueRoutine = false;
        }
  Routine reminder
    TextComponent text_4
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      units = height
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      text:
        Great job! Below is a reminder of the instructions now that you have seen the task.

        Depending on the given prompt, you will be asked to reproduce the length of the line or the amount of time it was presented for. Your screen will either show you one or multiple lines, but your focus should be on the black target line.

        As lines grow across the screen, please pay attention to both the final length, as well as the total amount of time the target line was on the screen. This experiment is aimed at measuring your innate perception of space and time, so it is important that you don't count or use your computer screen as a frame of reference for the lines.

        After the presentation of the line(s), if the prompt says "time," you will reproduce the duration that the target line appeared for. If the prompt says "line," you will reproduce the length of the target line.

        On the "line" trials, you will click the "X" icon, and then place another "X" (with your cursor) adjacent to the first. The distance between these two "X" icons will represent your estimate of the target line’s final length.

        On the "time" trials, you will click the grey hourglass to start your duration reproduction. Do not drag the hourglass, just click it again when you think the duration of the target line has passed.

        Please make sure your browser is in full screen mode (press "F11" to make the browser full screen on a PC and "control+command+F" on a Mac). Press "esc" at any point if you would like to completely exit the experiment.

        Press "space" to continue
    KeyboardComponent key_resp_6
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Each Frame:
        if trial_counter != 2:
            continueRoutine = False
  Routine snbackinstructions
    PolygonComponent inst_background
      fillColor = $[0.004,0.004,0.004]
      lineColor = $[0.004,0.004,0.004]
      shape = rectangle
      size = (3, 3)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent text_5
      letterHeight = 0.05
      pos = (-0.3,0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions
      units = height
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    KeyboardComponent key_resp_7
      allowedKeys = 's',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image
      image [set every repeat] = $nb_image
      pos = (0.6, .05)
      size [set every repeat] = $image_sz
      startVal [time (s)] = 0.0
      units = height
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  Routine nbacktrial_s
    PolygonComponent background
      fillColor = $[0.004,0.004,0.004]
      lineColor = $[0.004,0.004,0.004]
      shape = rectangle
      size = (3, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = height
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    ImageComponent grid
      image = grid.png
      size = [0.6, 0.6]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = height
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    PolygonComponent spatial_stim
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[1.000,1.000,1.000]
      pos [set every repeat] = [loc1,loc2]
      shape = rectangle
      size = [0.15,0.15]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = height
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    TextComponent strial_fix
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = +
      units = height
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    KeyboardComponent spatial_resp
      allowedKeys = 'space',
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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  Routine vnbackinstructions
    PolygonComponent inst_background_2
      fillColor = $[0.004,0.004,0.004]
      lineColor = $[0.004,0.004,0.004]
      shape = rectangle
      size = (3, 3)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent text_v
      letterHeight = 0.05
      pos = (-0.3,0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions
      units = height
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    KeyboardComponent key_resp_v
      allowedKeys = 's',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image_v
      image [set every repeat] = $nb_image
      pos = (0.6, .05)
      size [set every repeat] = $image_sz
      startVal [time (s)] = 0.0
      units = height
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  Routine nbacktrial_v
    PolygonComponent background_2
      fillColor = $[0.004,0.004,0.004]
      lineColor = $[0.004,0.004,0.004]
      shape = rectangle
      size = (3, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = height
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    ImageComponent grid_2
      image = grid.png
      size = [0.6, 0.6]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = height
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    TextComponent verbal_stim
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $number
      units = height
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    TextComponent strial_fix_2
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = +
      units = height
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    KeyboardComponent spatial_resp_2
      allowedKeys = 'space',
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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  Routine randomizer
    CodeComponent code_4
      Code Type = JS
      Begin JS Experiment:
        randNum = Math.floor(Math.random()*2)

        if (randNum == 0) {
            nRepsS = 1
            nRepsV = 0
        } else {
            nRepsS = 0
            nRepsV = 1
        }
      Begin JS Routine:
        temp = nRepsS;
        nRepsS = nRepsV;
        nRepsV = temp;
  Routine nback_instructions
    TextComponent text_6
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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      text:
        You will now be moving on to next component of this experiment. If you would like to take a break now, feel free to do so. You will recieve more detailed instructions for the next task on the next screen.

        Press "space" to continue.
    KeyboardComponent key_resp_8
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end_screen
    TextComponent text_7
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Thank you for your participation! Please wait while your data is saved. 
      units = height
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  Routine general_instructions
  Routine gen_instructions
    TextComponent instruction_text_4
      color = black
      letterHeight = .03
      startVal [time (s)] = 0.0
      units = height
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      text:
        In this task, you will be making temporal and spatial judgements of a line stimulus that appears on your screen. This task should take approximately 15 - 20 minutes.

        You can move through this experiment at your own pace, and there will be a designated break at the half-way point should you require it.

        When prompted, click the “X” icon(s) to calibrate left to right.

        You will receive more instructions before beginning. Please make sure your browser is in full screen mode (press "F11" to make the browser full screen on a PC and "control+command+F" on a Mac). Press "esc" at any point if you would like to completely exit the experiment.

        Press "space" to move onto the next screen
    KeyboardComponent instructions_key_resp_3
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_JS_2
      Code Type = Both
      Begin Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        shuffle = util.shuffle;
        Array.prototype.append = [].push
        GlobalClock = new util.Clock();
      Begin JS Experiment:
        thisExp = psychoJS.experiment;
        win = psychoJS.window;
        shuffle = util.shuffle;
        Array.prototype.append = [].push;
        GlobalClock = new util.Clock();
  Routine candb_instructions
    TextComponent instruction_text
      color = black
      letterHeight = .029
      startVal [time (s)] = 0.0
      units = height
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      text:
        In this task, you will see line(s) growing across the screen. Please pay attention to both the final length, as well as the total amount of time that the black target line is presented for.

        After the stimulus presentation, you will either be prompted to reproduce the duration (amount of time) of the black target line, or its length.

        On the "line" trials, you will click the "X" icon, and then place another "X" (with your cursor) adjacent to the first. The distance between these two "X" icons will represent your estimate of the target line’s final length.

        On the "time" trials, you will click the grey hourglass to start your duration reproduction. Do not drag the hourglass, just click it again when you think the duration of the target line has passed.

        Please make sure your browser is in full screen mode (press "F11" to make the browser full screen on a PC and "control+command+F" on a Mac). Press "esc" at any point if you would like to completely exit the experiment.

        Press "space" to move onto the next screen
    KeyboardComponent instructions_key_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine request_inst
    TextComponent instruction_re_text
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      units = height
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      text:
        Below is a reminder of the instructions:

        As lines grow across the screen, please pay attention to both the final length, as well as the total amount of time the target line is on the screen.

        After the presentation of the line(s), if the prompt says "time," you will reproduce the duration that the target line appeared for. If the prompt says "line," you will reproduce the length of the target line.

        On the "line" trials, you will click the "X" icon, and then place another "X" (with your cursor) adjacent to the first. The distance between these two "X" icons will represent your estimate of the target line’s final length.

        On the "time" trials, you will click the grey hourglass to start your duration reproduction. Do not drag the hourglass, just click it again when you think the duration of the target line has passed.

        Press "space" to continue with the task
    CodeComponent code_ir
      Code Type = Both
      Each Frame:
        if key_resp.keys[0] != 'i':
            continueRoutine = False # don't even start this routine
      Each JS Frame:
        if ((key_resp.keys[0] !== "i")) {
            continueRoutine = false;
        }
    KeyboardComponent key_resp_9
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine request_inst_t
    TextComponent instruction_re_text_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Request instructions! Press space to continue with task. 
      units = height
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    CodeComponent code_ir_2
      Code Type = Both
      Each Frame:
        if key_resp.keys[0] != 'i':
            continueRoutine = False # don't even start this routine
      Each JS Frame:
        if ((key_resp.keys[0] !== "i")) {
            continueRoutine = false;
        }
    KeyboardComponent key_resp_10
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Consent
    TextComponent consent_loading
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Loading...
      units = height
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    CodeComponent consent_code
      Code Type = JS
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      Begin JS Routine:
        let src = 'youtube.html';

        params = new Map;  // Results added here after form is submitted
        $(window).data('continueRoutine', true); // Routines can't be ended from outside Each Frame
        $(document).ready(function() {
            // Add custom contents from html file using an iframe:
            $('body').append('<div id="iframe-o" style="visibility: hidden; position: relative; display: table; margin: auto;"><div id="iframe-m" style="display: table-cell; vertical-align: middle;"><div id="iframe-i" style="display: inline-block; width:100%; overflow-y: auto; overflow-x: hidden;"><iframe id="iframe" src="'+src+'" style="width: 100%; height: 95%;"></iframe></div></div></div>');

            $('#iframe').on('load',function(iframe){
                let contents = $(this).contents().find('html');
                contents.css({ 'display': 'table', 'overflow-x': 'hidden' });

                // Detect absolute vs relative dimensions: This hack exposes the raw sizes...
                $('#iframe').hide();
                contents.data('width', ! /%$/.test(contents.css('width')));
                contents.data('height', ! /%$/.test(contents.css('height')));
                $('#iframe').show();

                // Auto-adjust iframe size:
                if ( contents.data('width') ) { // absolute width
                    $('#iframe-m').width(contents.width()+20);
                    contents.css({ 'width': '100%' });
                }
                else { // responsive width
                    $('#iframe-i').width ( $(window).width()-20, true );
                }
                if ( contents.data('height') ) { // absolute height
                    $('#iframe-o').height($(window).height()-20, true);
                    $('#iframe-i').height ( Math.min ( contents.height()+20, $(window).height()-20 ), true );
                }
                else { // responsive height
                    $('#iframe-i').height ( $(window).height()-20, true );
                }
                $('#iframe-o').css('visibility','visible');

                // If iframe contains a form, then capture its output:
                $(this).contents().find('form').on('submit',function(e){
                    e.preventDefault();
                    $.each($(this).serializeArray(),function(i, param){
                        if ( ! params.has(param.name) ) {
                            params.set ( param.name, param.value );
                        } else { // Handle multiple values (eg, checkboxes, multi-select)
                            params.set ( param.name, $.makeArray(params.get(param.name)) );
                            params.get(param.name).push ( param.value );
                        }
                    });
                    for ( var [name, value] of params ) {
                        psychoJS.experiment.addData(name, value);
                    }
                    console.log ( 'DEBUG:FRM', params );
                    // Remove iframe and continue to next routine when done:
                    $(window).data('continueRoutine', false);
                });
            });
        });
        //$('#iframe').attr( 'src', function(i,val){ return val;} );
      Each JS Frame:
        continueRoutine = $(window).data('continueRoutine');
        if ( ! continueRoutine ) $('#iframe-o').remove();
      End JS Routine:
        // Remove iframe and continue to next routine when done:
        $(window).data('continueRoutine', false);
  Routine troubleshooting
    TextComponent troubleshooting_text
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      units = height
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      text:
        Below is a troubleshooting guide:

        Unable to get back to fullscreen?
        Windows: press "F11"
        Mac: press "control+command+F" if the toolbar/taskbar is still visible, then go to View> and make sure that the option "Always Show Toolbar in Fullscreen" is deselected (i.e. doesn't have a check mark next to it).

        If you wish to completely exit the experiment, press "esc"

        If you are having any other issues, please contact shyamu93@my.yorku.ca for further assistance.

        Press "space" to continue with the task
    CodeComponent code_trblsht
      Code Type = Both
      Each Frame:
        if key_resp.keys[0] != 't':
            continueRoutine = False # don't even start this routine
      Each JS Frame:
        if ((key_resp.keys[0] !== "t")) {
            continueRoutine = false;
        }
    KeyboardComponent key_resp_11
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_instructions
    TextComponent instruction_text_3
      color = black
      letterHeight = .035
      startVal [time (s)] = 0.0
      units = height
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      text:
        Below is a troubleshooting guide:

        Unable to get back to fullscreen?
        Windows: press "F11"
        Mac: press "control+command+F" if the toolbar/taskbar is still visible, then go to View> and make sure that the option "Always Show Toolbar in Fullscreen" is deselected (i.e. doesn't have a check mark next to it).

        If you wish to completely exit the experiment, press "esc"

        If you are having any other issues, please contact shyamu93@my.yorku.ca for further assistance.

        Press "space" to continue with the task
    KeyboardComponent instructions_key_resp_2
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine screen_calibration
    TextComponent calibration_instructions
      color = black
      letterHeight = 0.05
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Click the two ends of the line to calibrate your screen size.
      units = height
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    PolygonComponent cal_line
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 5
      shape = line
      size = 0.5
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent c_start_x
      fillColor = $[1,1,1]
      lineColor = $[-1.000,-1.000,-1.000]
      ori = 45
      pos = (-0.25, 0)
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent c_end_x
      fillColor = $[1,1,1]
      lineColor = $[-1.000,-1.000,-1.000]
      ori = 45
      pos = (0.25, 0)
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent cal_mouse_start
      clickable = c_start_x
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent calibration_code
      Code Type = Both
      Each JS Frame:
        if (cal_mouse_start.isPressedIn(c_start_x)) {
            c_start_x.fillColor = [1.000,0.004,1.000];
        }
  Routine screen_calibration_end
    TextComponent calibration_instructions_2
      color = black
      letterHeight = 0.05
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Click the two ends of the line to calibrate your screen size.  
      units = height
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    PolygonComponent cal_line_2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 5
      pos [set every frame] = (0,0)
      shape = line
      size [set every frame] = 0.5
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent c_start_x_2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      ori = 45
      pos = (-0.25, 0)
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent c_end_x_2
      fillColor = $[1,1,1]
      lineColor = $[-1.000,-1.000,-1.000]
      ori = 45
      pos = (0.25, 0)
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent mouse_cal_end_2
      clickable = c_end_x
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine screen_calibration_end_2
    TextComponent calibration_instructions_3
      color = black
      letterHeight = 0.05
      pos = (0, .25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = Click the two ends of the line to calibrate your screen size. 
      units = height
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    PolygonComponent cal_line_3
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 5
      pos [set every frame] = (0,0)
      shape = line
      size [set every frame] = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      units = height
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    PolygonComponent c_start_x_3
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      ori = 45
      pos = (-0.25, 0)
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      units = height
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    PolygonComponent c_end_x_3
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      ori = 45
      pos = (0.25, 0)
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      units = height
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  Routine start_x
    PolygonComponent startx
      fillColor [set every repeat] = $[1.000,1.000,1.000]
      lineColor [set every repeat] = $[-1.000,-1.000,-1.000]
      lineWidth = 3
      ori = 45
      pos [set every repeat] = $x_loc
      shape = cross
      size = (0.06, 0.06)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent mouse_startx
      clickable = startx
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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    CodeComponent mouse_code_4
      Code Type = Both
      Each JS Frame:
        if (mouse_startx.isPressedIn(startx)) {
            startx.fillColor = [1.000,0.004,1.000];
        }
  Routine end_x
    PolygonComponent startx_ph
      fillColor [set every repeat] = $[-1.000,-1.000,-1.000]
      lineColor [set every repeat] = $[-1.000,-1.000,-1.000]
      lineWidth = 3
      ori = 45
      pos [set every repeat] = $x_loc
      shape = cross
      size = (0.06, 0.06)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent polygon
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[1.000,1.000,1.000]
      pos [set every repeat] = $box_loc
      shape = rectangle
      size = (1.6, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent mouse
      clickable = polygon
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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    CodeComponent mouse_code
      Code Type = Both
      Begin JS Routine:
        crosses = [];
      Begin Routine:
        crosses = [] ;
      Each Frame:
        if mouse.isPressedIn(polygon):
            cross = visual.ShapeStim(win, pos=clicker.getPos(), vertices='cross', depth=-2, size=(50,50), ori=45.0, fillColor="black")
            cross.setAutoDraw(True)
            crosses.append()
      Each JS Frame:
        if (mouse.isPressedIn(polygon)) {
            cross = new visual.ShapeStim({win: psychoJS.window, pos: mouse.getPos(), vertices: 'cross', size: [50, 50], ori: 45.0, fillColor: [1.000, 1.000, 1.000]});
            cross.setAutoDraw(true);
            crosses.append(cross);
        }
  Routine pause
    CodeComponent mouse_code_6
      Code Type = Both
      End JS Routine:
        for (var across, _pj_c = 0, _pj_a = crosses, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            across = _pj_a[_pj_c];
            across.setAutoDraw(false);
        }
      End Routine:
        for across in crosses:
                across.setAutoDraw(False)
    PolygonComponent startx_4
      fillColor [set every repeat] = $[-1.000,-1.000,-1.000]
      lineColor [set every repeat] = $[-1.000,-1.000,-1.000]
      ori = 45
      pos [set every repeat] = $x_loc
      shape = cross
      size = (0.06, 0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
      units = height
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Flow
  Routine gen_instructions
  Routine screen_calibration
  Routine screen_calibration_end
  Routine screen_calibration_end_2
  Routine candb_instructions
  Routine practice_instructions
  LoopInitiator practice_loop loopType="TrialHandler"
    conditionsFile = linetask_prac_conditions_mod.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('durations', 2.5), ('disp', 330), ('start', -600), ('rand', 0.291418442), ('jitter', 165.0), ('display', 'time'), ('spatial', 0), ('temporal', 1), ('x_loc', [-0.75, 0.4]), ('box_loc', [0.15, 0.4]), ('top_hg_loc', [-0.75, 0.42]), ('bottom_hg_loc', [-0.75, 0.4]), ('ystartdistractor1', 100), ('ystartdistractor2', -100), ('ystarttarget', 0), ('xstartdistractor1', -300), ('xstartdistractor2', -200), ('durationsdistractor1', 0.0), ('durationsdistractor2', 0.0), ('jitterdistractor1', 37.5), ('jitterdistractor2', 17.5), ('dispdistractor1', 75), ('dispdistractor2', 35)]),
      OrderedDict([('durations', 1.75), ('disp', 600), ('start', -400), ('rand', 0.140329976), ('jitter', 300.0), ('display', 'line'), ('spatial', 1), ('temporal', 0), ('x_loc', [-0.75, -0.4]), ('box_loc', [0.15, -0.4]), ('top_hg_loc', [-0.75, -0.42]), ('bottom_hg_loc', [-0.75, -0.4]), ('ystartdistractor1', 100), ('ystartdistractor2', -100), ('ystarttarget', 0), ('xstartdistractor1', -200), ('xstartdistractor2', -300), ('durationsdistractor1', 5.25), ('durationsdistractor2', 6.0), ('jitterdistractor1', 17.5), ('jitterdistractor2', 37.5), ('dispdistractor1', 35), ('dispdistractor2', 75)]),
      OrderedDict([('durations', 5.25), ('disp', 35), ('start', -200), ('rand', 0.511515263), ('jitter', 17.5), ('display', 'time'), ('spatial', 0), ('temporal', 1), ('x_loc', [-0.75, -0.4]), ('box_loc', [0.15, -0.4]), ('top_hg_loc', [-0.75, -0.38]), ('bottom_hg_loc', [-0.75, -0.4]), ('ystartdistractor1', 100), ('ystartdistractor2', -100), ('ystarttarget', 0), ('xstartdistractor1', -600), ('xstartdistractor2', -400), ('durationsdistractor1', 2.5), ('durationsdistractor2', 1.75), ('jitterdistractor1', 165.0), ('jitterdistractor2', 300.0), ('dispdistractor1', 330), ('dispdistractor2', 600)]),
      OrderedDict([('durations', 1.75), ('disp', 600), ('start', -400), ('rand', 0.140329976), ('jitter', 300.0), ('display', 'line'), ('spatial', 1), ('temporal', 0), ('x_loc', [-0.75, -0.4]), ('box_loc', [0.15, -0.4]), ('top_hg_loc', [-0.75, -0.42]), ('bottom_hg_loc', [-0.75, -0.4]), ('ystartdistractor1', 100), ('ystartdistractor2', -100), ('ystarttarget', 0), ('xstartdistractor1', -200), ('xstartdistractor2', -300), ('durationsdistractor1', 0.0), ('durationsdistractor2', 0.0), ('jitterdistractor1', 17.5), ('jitterdistractor2', 37.5), ('dispdistractor1', 35), ('dispdistractor2', 75)])]
    Routine fixationcrosses
    Routine targetlines
    Routine prompt
    LoopInitiator loop_spatial loopType="TrialHandler"
      loopType = random
      nReps = spatial
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      Routine start_x
      Routine end_x
      Routine pause
    LoopTerminator loop_spatial
    LoopInitiator loop_temporal loopType="TrialHandler"
      loopType = random
      nReps = temporal
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      Routine hg_start
      Routine hg_mid
      Routine hg_end
    LoopTerminator loop_temporal
    Routine ready
    Routine reminder
    Routine troubleshooting
    Routine request_inst
  LoopTerminator practice_loop
  Routine practicetrialendscreen
  LoopInitiator exp_loop loopType="TrialHandler"
    conditionsFile = linetask_full_conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('durations', 1.0), ('disp', 725.0), ('start', -300), ('jitter', 362.5), ('display', 'line'), ('spatial', 1), ('temporal', 0), ('catchn', 0), ('catchd', 'please press the "c" key on your keyboard'), ('x_loc', [-0.75, 0.4]), ('box_loc', [0.15, 0.4]), ('top_hg_loc', [-0.75, -0.38]), ('bottom_hg_loc', [-0.75, -0.4]), ('ystartdistractor1', 0), ('ystartdistractor2', 0), ('ystarttarget', 0), ('xstartdistractor1', 0), ('xstartdistractor2', 0), ('durationsdistractor1', 0.0), ('durationsdistractor2', 0.0), ('jitterdistractor1', 0.0), ('jitterdistractor2', 0.0), ('dispdistractor1', 0.0), (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,
      OrderedDict([('durations', 1.0), ('disp', 575.0), ('start', -200), ('jitter', 287.5), ('display', 'line'), ('spatial', 1), ('temporal', 0), ('catchn', 0), ('catchd', 'please press the "c" key on your keyboard'), ('x_loc', [-0.75, 0.4]), ('box_loc', [0.15, 0.4]), ('top_hg_loc', [-0.75, -0.38]), ('bottom_hg_loc', [-0.75, -0.4]), ('ystartdistractor1', 0), ('ystartdistractor2', 0), ('ystarttarget', 0), ('xstartdistractor1', 0), ('xstartdistractor2', 0), ('durationsdistractor1', 0.0), ('durationsdistractor2', 0.0), ('jitterdistractor1', 0.0), ('jitterdistractor2', 0.0), ('dispdistractor1', 0.0), ('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,
      OrderedDict([('durations', 1.0), ('disp', 800.0), ('start', -600), ('jitter', 400.0), ('display', 'time'), ('spatial', 0), ('temporal', 1), ('catchn', 0), ('catchd', 'please press the "c" key on your keyboard'), ('x_loc', [-0.75, -0.4]), ('box_loc', [0.15, -0.4]), ('top_hg_loc', [-0.75, 0.42]), ('bottom_hg_loc', [-0.75, 0.4]), ('ystartdistractor1', 0), ('ystartdistractor2', 0), ('ystarttarget', 0), ('xstartdistractor1', 0), ('xstartdistractor2', 0), ('durationsdistractor1', 0.0), ('durationsdistractor2', 0.0), ('jitterdistractor1', 0.0), ('jitterdistractor2', 0.0), ('dispdistractor1', 0.0), ('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,
      OrderedDict([('durations', 1.5), ('disp', 133.3333333), ('start', -400), ('jitter', 66.66666667), ('display', 'line'), ('spatial', 1), ('temporal', 0), ('catchn', 0), ('catchd', 'please press the "c" key on your keyboard'), ('x_loc', [-0.75, 0.4]), ('box_loc', [0.15, 0.4]), ('top_hg_loc', [-0.75, -0.38]), ('bottom_hg_loc', [-0.75, -0.4]), ('ystartdistractor1', 0), ('ystartdistractor2', 0), ('ystarttarget', 0), ('xstartdistractor1', 0), ('xstartdistractor2', 0), ('durationsdistractor1', 0.0), ('durationsdistractor2', 0.0), ('jitterdistractor1', 0.0), ('jitterdistractor2', 0.0), ('dispdistractor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
    Routine fixationcrosses
    Routine targetlines
    Routine prompt
    LoopInitiator loop_spatial_exp loopType="TrialHandler"
      loopType = random
      nReps = spatial
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      Routine start_x
      Routine end_x
      Routine pause
    LoopTerminator loop_spatial_exp
    LoopInitiator loop_temporal_exp loopType="TrialHandler"
      loopType = random
      nReps = temporal
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      Routine hg_start
      Routine hg_mid
      Routine hg_end
    LoopTerminator loop_temporal_exp
    Routine ready
    Routine request_inst
    Routine catchtrials
    Routine breakscreen
  LoopTerminator exp_loop
  Routine end_screen
